PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = OpenBCIExp
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Routines
  Routine WelcomeScreen
    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment

        Please take a seat and follow the instructions.
        press space whenever you are ready to start the experiment!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine studyRoutine
    ImageComponent image
      image [set every frame] = $images
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 8
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  Routine EndScreen
    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thanks for participating in this experiment.
        Please see the researcher now.
  Routine blank5s
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Break Time
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  Routine recogHappy
    ImageComponent image_2
      image = HappyNeutral/168_m_f_h_b.jpg
      pos = (0.3, 0)
      size = (0.75, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.09
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
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      text:
        Do you
        recongnize
        this picture
        as a happy
        face?
  Routine recogSad
    ImageComponent image_3
      image = SadNeutral/066_y_m_s_b.jpg
      pos = (0.3, 0)
      size = (0.75, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.09
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
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      text:
        Do you
        recongnize
        this picture
        as a sad
        face?
  Routine recogNeutral
    ImageComponent image_4
      image = HappyNeutral/Neutral 9.jpg
      pos = (0.3, 0)
      size = (0.75, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.09
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
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      text:
        Do you
        recongnize
        this picture
        as a neutral
        face?
  Routine imageStudy
    ImageComponent image_5
      image [set during: blank.ISI] = $images
      size = (0.5, 0.65)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import time
        beginExp = time.time()

        count = 0
      Begin Routine:
        beginRout = time.time()
      End Routine:
        print("Duration since Experiment start:", time.time() - beginExp)
        print("Duration since Routine start:" , time.time() - beginRout)

        count += 1
        print("Current Count:" , count)
  Routine blank
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = (randint(5) / 10.0) + .8
      syncScreenRefresh = True
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  Routine rest
    TextComponent text_8
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        After taking an enough rest,
        press "space" to continue the experiment.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine imageTest
    ImageComponent image_6
      image [set every repeat] = $images
      size = (0.5, 0.65)
      startVal [frame N] = 0.0
      stopVal [frame N] = 8
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Flow
  Routine WelcomeScreen
  Routine recogHappy
  Routine recogNeutral
  Routine recogSad
  Routine blank5s
  LoopInitiator testTrials loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = happyNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('images', 'HappyNeutral/004_o_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/140_y_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/066_y_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s003-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 3.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/079_o_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/168_m_f_h_a.jpg'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/s037-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/s001-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/116_m_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/004_o_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/140_y_f_h_a.jpg'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 7.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/116_m_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s012-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/140_y_f_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/168_m_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s006-01_img.bmp'), ('emotion', 'happy')])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
    Routine blank
    Routine imageStudy
  LoopTerminator testTrials
  Routine blank5s
  LoopInitiator TestTrials_2 loopType="TrialHandler"
    Selected rows = 10:20
    conditionsFile = happyNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('images', 'HappyNeutral/004_o_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/140_y_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/066_y_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s003-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 3.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/079_o_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/168_m_f_h_a.jpg'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/s037-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/s001-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/116_m_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/004_o_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/140_y_f_h_a.jpg'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 7.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/116_m_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s012-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/140_y_f_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/168_m_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s006-01_img.bmp'), ('emotion', 'happy')])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
    Routine blank
    Routine imageStudy
  LoopTerminator TestTrials_2
  Routine blank5s
  LoopInitiator testTrials_4 loopType="TrialHandler"
    Selected rows = 20:30
    conditionsFile = happyNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator testTrials_4
  Routine blank5s
  LoopInitiator TeatRrials_3 loopType="TrialHandler"
    Selected rows = 30:40
    conditionsFile = happyNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator TeatRrials_3
  Routine blank5s
  LoopInitiator testTrials_5 loopType="TrialHandler"
    Selected rows = 40:50
    conditionsFile = happyNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator testTrials_5
  Routine blank5s
  LoopInitiator testTrials_6 loopType="TrialHandler"
    Selected rows = 50:60
    conditionsFile = happyNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator testTrials_6
  Routine blank5s
  LoopInitiator testTrials_7 loopType="TrialHandler"
    Selected rows = 60:70
    conditionsFile = happyNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator testTrials_7
  Routine rest
  LoopInitiator trial loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = happyNeutral.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator trial
  Routine blank5s
  LoopInitiator trial_2 loopType="TrialHandler"
    Selected rows = 10:20
    conditionsFile = happyNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator trial_2
  Routine blank5s
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 20:30
    conditionsFile = happyNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator trials_3
  Routine blank5s
  LoopInitiator threeHappyblocks loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials_4 loopType="TrialHandler"
      Selected rows = 30:40
      conditionsFile = happyNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator trials_4
    Routine blank5s
    LoopInitiator trials_5 loopType="TrialHandler"
      Selected rows = 40:50
      conditionsFile = happyNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator trials_5
    Routine blank5s
    LoopInitiator trials_6 loopType="TrialHandler"
      Selected rows = 50:60
      conditionsFile = happyNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator trials_6
    Routine blank5s
    LoopInitiator trials_7 loopType="TrialHandler"
      Selected rows = 54:64
      conditionsFile = happyNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator trials_7
    Routine blank5s
    LoopInitiator trials_8 loopType="TrialHandler"
      Selected rows = 35:45
      conditionsFile = happyNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator trials_8
    Routine blank5s
    LoopInitiator trials_9 loopType="TrialHandler"
      Selected rows = 15:25
      conditionsFile = happyNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator trials_9
    Routine blank5s
    LoopInitiator trials_10 loopType="TrialHandler"
      Selected rows = 60:70
      conditionsFile = happyNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator trials_10
  LoopTerminator threeHappyblocks
  Routine rest
  LoopInitiator sadTrials_ loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = sadNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('images', 'SadNeutral/004_o_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/Neutral 7.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/140_y_f_s_b.jpg'), ('emotion', 'sad')]),
      OrderedDict([('images', 'SadNeutral/Neutral 4.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/004_o_m_s_a.jpg'), ('emotion', 'sad')]),
      OrderedDict([('images', 'SadNeutral/s028-02_img.bmp'), ('emotion', 'sad')]),
      OrderedDict([('images', 'SadNeutral/s005-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/140_y_f_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/116_m_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/066_y_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/s037-02_img.bmp'), ('emotion', 'sad')]),
      OrderedDict([('images', 'SadNeutral/s006-02_img.bmp'), ('emotion', 'sad')]),
      OrderedDict([('images', 'SadNeutral/168_m_f_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/066_y_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/s003-02_img.bmp'), ('emotion', 'sad')]),
      OrderedDict([('images', 'SadNeutral/s003-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/s006-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/s009-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/Neutral 3.jpg'), ('emotion', 'neutral')])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
    Routine blank
    Routine imageStudy
  LoopTerminator sadTrials_
  Routine blank5s
  LoopInitiator sadTrials_2 loopType="TrialHandler"
    Selected rows = 10:20
    conditionsFile = sadNeutral.xlsx
    loopType = random
    nReps = 5
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator sadTrials_2
  Routine blank5s
  LoopInitiator sadTrials_3 loopType="TrialHandler"
    Selected rows = 20:30
    conditionsFile = sadNeutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator sadTrials_3
  Routine blank5s
  LoopInitiator threeSadBlocks loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator sadTrials_4 loopType="TrialHandler"
      Selected rows = 30:40
      conditionsFile = sadNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator sadTrials_4
    Routine blank5s
    LoopInitiator sadTrials_5 loopType="TrialHandler"
      Selected rows = 40:50
      conditionsFile = sadNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator sadTrials_5
    Routine blank5s
    LoopInitiator sasdTrials_6 loopType="TrialHandler"
      Selected rows = 50:60
      conditionsFile = sadNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator sasdTrials_6
    Routine blank5s
    LoopInitiator sadTrials_7 loopType="TrialHandler"
      Selected rows = 60:70
      conditionsFile = sadNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator sadTrials_7
    Routine blank5s
    LoopInitiator sadTrials_8 loopType="TrialHandler"
      Selected rows = 35:45
      conditionsFile = sadNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator sadTrials_8
    Routine blank5s
    LoopInitiator sadTrials_9 loopType="TrialHandler"
      Selected rows = 20:30
      conditionsFile = sadNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator sadTrials_9
    Routine blank5s
    LoopInitiator sadTrials_10 loopType="TrialHandler"
      Selected rows = 54:64
      conditionsFile = sadNeutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator sadTrials_10
  LoopTerminator threeSadBlocks
  Routine rest
  LoopInitiator oneHFiveN loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = 1happy5Neut.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('images', 'HappyNeutral/140_y_f_h_a.jpg'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 9.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 7.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/116_m_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/066_y_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 4.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/004_o_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s003-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 6.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/140_y_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s001-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/066_y_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s003-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 10.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s009-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s002-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/s002-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 3.jpg'), ('emotion', 'neutral')])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
    Routine blank
    Routine imageStudy
  LoopTerminator oneHFiveN
  Routine blank5s
  LoopInitiator oneHFiveN_2 loopType="TrialHandler"
    Selected rows = 6:12
    conditionsFile = 1happy5Neut.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('images', 'HappyNeutral/140_y_f_h_a.jpg'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 9.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 7.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/116_m_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/066_y_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 4.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/004_o_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s003-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 6.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/140_y_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s001-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/066_y_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s003-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 10.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s009-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/s002-01_img.bmp'), ('emotion', 'happy')]),
      OrderedDict([('images', 'HappyNeutral/s002-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'HappyNeutral/Neutral 3.jpg'), ('emotion', 'neutral')])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
    Routine blank
    Routine imageStudy
  LoopTerminator oneHFiveN_2
  Routine blank5s
  LoopInitiator oneHFiveN_3 loopType="TrialHandler"
    Selected rows = 12:18
    conditionsFile = 1happy5Neut.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator oneHFiveN_3
  Routine blank5s
  LoopInitiator oneHFiveN_4th loopType="TrialHandler"
    Selected rows = 30:36
    conditionsFile = 1happy5Neut.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator oneHFiveN_4th
  Routine blank5s
  LoopInitiator oneHappy5Neutral_21_trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator oneHFiveN_4 loopType="TrialHandler"
      Selected rows = 18:24
      conditionsFile = 1happy5Neut.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneHFiveN_4
    Routine blank5s
    LoopInitiator oneHFiveN_5 loopType="TrialHandler"
      Selected rows = 24:30
      conditionsFile = 1happy5Neut.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneHFiveN_5
    Routine blank5s
    LoopInitiator oneHFiveN_6 loopType="TrialHandler"
      Selected rows = 30:36
      conditionsFile = 1happy5Neut.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneHFiveN_6
    Routine blank5s
    LoopInitiator oneHFiveN_7 loopType="TrialHandler"
      Selected rows = 36:42
      conditionsFile = 1happy5Neut.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneHFiveN_7
    Routine blank5s
    LoopInitiator oneHFiveN_8 loopType="TrialHandler"
      Selected rows = 42:48
      conditionsFile = 1happy5Neut.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneHFiveN_8
    Routine blank5s
    LoopInitiator oneHFiveN_9 loopType="TrialHandler"
      Selected rows = 48:54
      conditionsFile = 1happy5Neut.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneHFiveN_9
    Routine blank5s
    LoopInitiator oneHFiveN_10 loopType="TrialHandler"
      Selected rows = 54:60
      conditionsFile = 1happy5Neut.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneHFiveN_10
  LoopTerminator oneHappy5Neutral_21_trials
  Routine rest
  LoopInitiator oneSadFiveN loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = 1sad5Neutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('images', 'SadNeutral/004_o_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/s009-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/168_m_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/Neutral 7.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/140_y_f_s_b.jpg'), ('emotion', 'sad')]),
      OrderedDict([('images', 'SadNeutral/Neutral 5.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/168_m_f_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/066_y_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/Neutral 4.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/004_o_m_s_a.jpg'), ('emotion', 'sad')]),
      OrderedDict([('images', 'SadNeutral/140_y_f_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/116_m_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/s028-02_img.bmp'), ('emotion', 'sad')]),
      OrderedDict([('images', 'SadNeutral/s005-00_img.bmp'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/079_o_f_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/116_m_m_n_a.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/004_o_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/066_y_m_n_b.jpg'), ('emotion', 'neutral')]),
      OrderedDict([('images', 'SadNeutral/s037-02_img.bmp'), ('emotion', 'sad')])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
    Routine blank
    Routine imageStudy
  LoopTerminator oneSadFiveN
  Routine blank5s
  LoopInitiator oneSadFiveN_2 loopType="TrialHandler"
    Selected rows = 6:12
    conditionsFile = 1sad5Neutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator oneSadFiveN_2
  Routine blank5s
  LoopInitiator oneSadFiveN_3 loopType="TrialHandler"
    Selected rows = 12:18
    conditionsFile = 1sad5Neutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator oneSadFiveN_3
  Routine blank5s
  LoopInitiator oneSadFiveN_4th loopType="TrialHandler"
    Selected rows = 36:42
    conditionsFile = 1sad5Neutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine blank
    Routine imageStudy
  LoopTerminator oneSadFiveN_4th
  Routine blank5s
  LoopInitiator oneSad5Neutral loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator oneSadFiveN_4 loopType="TrialHandler"
      Selected rows = 18:24
      conditionsFile = 1sad5Neutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneSadFiveN_4
    Routine blank5s
    LoopInitiator oneSadFiveN_5 loopType="TrialHandler"
      Selected rows = 24:30
      conditionsFile = 1sad5Neutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneSadFiveN_5
    Routine blank5s
    LoopInitiator oneSadFiveN_6 loopType="TrialHandler"
      Selected rows = 30:36
      conditionsFile = 1sad5Neutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneSadFiveN_6
    Routine blank5s
    LoopInitiator oneSadFiveN_7 loopType="TrialHandler"
      Selected rows = 36:42
      conditionsFile = 1sad5Neutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneSadFiveN_7
    Routine blank5s
    LoopInitiator oneSadFiveN_8 loopType="TrialHandler"
      Selected rows = 42:48
      conditionsFile = 1sad5Neutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneSadFiveN_8
    Routine blank5s
    LoopInitiator oneSadFiveN_9 loopType="TrialHandler"
      Selected rows = 48:54
      conditionsFile = 1sad5Neutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneSadFiveN_9
    Routine blank5s
    LoopInitiator oneSadFiveN_10 loopType="TrialHandler"
      Selected rows = 54:60
      conditionsFile = 1sad5Neutral.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine blank
      Routine imageStudy
    LoopTerminator oneSadFiveN_10
  LoopTerminator oneSad5Neutral
  Routine EndScreen
